PsychoPy2experiment version="1.84.2"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = untitled
  Units = use prefs
  Screen = 1
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Routines
  Routine resp_post
    ImageComponent instrImg
      opacity [set every repeat] = 1
      stopVal [duration (s)] = 1.5
      pos [set every repeat] = [0, 0]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.0
      image [set every repeat] = $instr
      size [set every repeat] = [0.5, 0.5]
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    TextComponent task
      color [set every repeat] = white
      text [set every repeat] = respond
      stopVal [duration (s)] = 1.5
      pos [set every repeat] = [0,-0.5]
      startVal [time (s)] = 0.0
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.1
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  Routine end
    KeyboardComponent end_task
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent thanks
      text = Tack!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine fix
    PolygonComponent polygon
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $fix
      startVal [time (s)] = 0.0
      nVertices = 90
      size [set every repeat] = [0.02, 0.02]
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  Routine P
    ImageComponent image
      stopVal [duration (s)] = $dur
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      image [set every repeat] = $img
      size = [1.35, 1.35]
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    TextComponent instr
      text = svara!
      stopVal [duration (s)] = 4
      pos = [0, 0.92]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    KeyboardComponent resp
      correctAns = $cr
      storeCorrect = True
      stopVal [duration (s)] = $dur
      forceEndRoutine = False
      allowedKeys [set every repeat] = '1','2'
      startVal [time (s)] = 0.0
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    TextComponent seen
      color = $[-0.420,-0.420,1.000]
      text = Ja
      stopVal [duration (s)] = dur
      pos = (-0.4, -0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent new
      color = yellow
      text = Nej
      stopVal [duration (s)] = $dur
      pos = (0.4, -0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Trigger
    TextComponent varRedo
      text = Var redo...
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent trigger
      forceEndRoutine = True
      allowedKeys = '5'
      startVal [time (s)] = 0.0
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  Routine fixPost
    PolygonComponent polygon_3
      fillColor = $[-1.000,1.000,-0.498]
      lineColor = $[-1.000,1.000,-0.498]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.02, 0.02)
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    TextComponent index_2
      color = $[0.506,0.506,0.506]
      text = <
      pos = (-0.95, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    KeyboardComponent skipFIX_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine fixPre
    PolygonComponent polygon_2
      fillColor = $[-1.000,1.000,-0.498]
      lineColor = $[-1.000,1.000,-0.498]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.02, 0.02)
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    TextComponent index
      color = $[0.506,0.506,0.506]
      text = >
      pos = (-0.95, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    KeyboardComponent skipFIX
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine intro
    ImageComponent intro_pic
      startVal [time (s)] = 0.0
      image = stim/intro.png
      size = (1.5, 1.5)
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    TextComponent instructions
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Om du *känner* igen bilden från träningsperioden trycker du på knappen till vänster.
        Om du *inte känner* igen bilden från träningsperioden trycker du på knappen till höger.
        Du har 3 sekunder på dig att svara, sedan försvinner bilden så det är viktigt att du trycka på en av knapparna innan dess.
    KeyboardComponent skip
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine fixPre
  Routine intro
  Routine Trigger
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = IOstim-2017-03-10.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'img': u'stim/556_i.jpg', u'fix': 2.13, u'cr': 2L, u'dur': 4.37, u'type': u'novel', u'onsets': 0L},
      {u'img': u'stim/38_o.jpg', u'fix': 2.06, u'cr': 1L, u'dur': 5.13, u'type': u'last', u'onsets': 6.5},
      {u'img': u'stim/298_i.jpg', u'fix': 2.08, u'cr': 2L, u'dur': 5.84, u'type': u'novel', u'onsets': 13.690000000000001},
      {u'img': u'stim/151_o.jpg', u'fix': 2.22, u'cr': 2L, u'dur': 6.23, u'type': u'novel', u'onsets': 21.61},
      {u'img': u'stim/8_o.jpg', u'fix': 2.12, u'cr': 2L, u'dur': 6.04, u'type': u'novel', u'onsets': 30.06},
      {u'img': u'stim/193_o.jpg', u'fix': 2.22, u'cr': 2L, u'dur': 4.57, u'type': u'novel', u'onsets': 38.22},
      {u'img': u'stim/195_o.jpg', u'fix': 2.13, u'cr': 1L, u'dur': 5.37, u'type': u'rep4', u'onsets': 45.01},
      {u'img': u'stim/72_o.jpg', u'fix': 2.2, u'cr': 1L, u'dur': 5.04, u'type': u'rep4', u'onsets': 52.51},
      {u'img': u'stim/419_i.jpg', u'fix': 2.26, u'cr': 2L, u'dur': 5.11, u'type': u'novel', u'onsets': 59.75},
      {u'img': u'stim/369_i.jpg', u'fix': 2.19, u'cr': 1L, u'dur': 5.43, u'type': u'last', u'onsets': 67.12},
      {u'img': u'stim/388_i.jpg', u'fix': 2.15, u'cr': 2L, u'dur': 5.88, u'type': u'novel', u'onsets': 74.74000000000001},
      {u'img': u'stim/17_o.jpg', u'fix': 2.24, u'cr': 2L, u'dur': 6.23, u'type': u'novel', u'onsets': 82.77000000000001},
      {u'img': u'stim/542_i.jpg', u'fix': 2.22, u'cr': 1L, u'dur': 5.68, u'type': u'rep4', u'onsets': 91.24000000000001},
      {u'img': u'stim/531_i.jpg', u'fix': 2.13, u'cr': 2L, u'dur': 5.42, u'type': u'novel', u'onsets': 99.14000000000001}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
    Routine P
    Routine fix
  LoopTerminator trials
  Routine end
  Routine fixPost
